<CompuCell3D Revision="20171121" Version="3.7.7">
   
   <Potts>
      
      <!-- Basic properties of CPM (GGH) algorithm -->
      <Dimensions x="100" y="100" z="1"/>
      <Steps>10000</Steps>
      <Temperature>10.0</Temperature>
      <NeighborOrder>2</NeighborOrder>
   </Potts>
   
   <Plugin Name="CellType">
      
      <!-- Listing all cell types in the simulation -->
      <CellType TypeId="0" TypeName="Medium"/>
      <CellType TypeId="1" TypeName="Condensing"/>
      <CellType TypeId="2" TypeName="NonCondensing"/>
   </Plugin>
   
   <Plugin Name="Volume">
      <VolumeEnergyParameters CellType="Condensing" LambdaVolume="2.0" TargetVolume="25"/>
      <VolumeEnergyParameters CellType="NonCondensing" LambdaVolume="2.0" TargetVolume="25"/>
   </Plugin>
   
   <Plugin Name="CenterOfMass">
      
      <!-- Module tracking center of mass of each cell -->
   </Plugin>
   
   <Plugin Name="Contact">
      <!-- Specification of adhesion energies -->
      <Energy Type1="Medium" Type2="Medium">10.0</Energy>
      <Energy Type1="Medium" Type2="Condensing">16.0</Energy>
      <Energy Type1="Medium" Type2="NonCondensing">16.0</Energy>
      <Energy Type1="Condensing" Type2="Condensing">2.0</Energy>
      <Energy Type1="Condensing" Type2="NonCondensing">10.0</Energy>
      <Energy Type1="NonCondensing" Type2="NonCondensing">1.0</Energy>
      <NeighborOrder>1</NeighborOrder>
   </Plugin>
   
   <Steppable Type="UniformInitializer">
      
      <!-- Initial layout of cells in the form of rectangular slab -->
      <Region>
         <BoxMin x="20" y="20" z="0"/>
         <BoxMax x="80" y="80" z="1"/>
         <Gap>0</Gap>
         <Width>5</Width>
         <Types>Condensing,NonCondensing</Types>
      </Region>
   </Steppable>
</CompuCell3D>
